PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s' % (expInfo['Participante'], expInfo['Participante'], expInfo['date'])
  Experiment info = {'Participante': '', 'Edad': '', 'Lateralidad': "['Derecha', 'Izquierda', '']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = semantic-decision
  keyboardBackend = ioHub
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Routines
  Routine practice_trials_instructions
    RoutineSettingsComponent practice_trials_instructions
      saveStartStop = False
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    TextComponent practice_instructions_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bienvenido. Para esta tarea te pedimos que juzgues qué tan familiar te resulta la palabra.

        Para cada palabra, usá las flechas del teclado para indicar tu respuesta.

        Presiona ESPACIO para continuar.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_trials_instructions_2
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    TextComponent practice_instructions_text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ahora vamos a hacer algunos ensayos de práctica. Respondé lo más rápido que puedas.

        No hay una respuesta estrictametne correcta. Juzga cuan familiares o comunes son los estímulos según lo que más te parezca.

        Presioná ESPACIO para continuar.
    KeyboardComponent key_resp_practice_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fx_cross_practice
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    TextComponent fx_cross_1
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.8
      text = +
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  Routine stim_practice
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    TextComponent practice_stimulus
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
      text [set every repeat] = $practiceWord
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    KeyboardComponent key_resp_practice_stim
      allowedKeys = 'right','left'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        serialconection._send_pulse_to_arduino()
  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        feedback_text = 'CORRECTO' if correctAns == key_resp_practice_stim.keys else 'INCORRECTO'
    TextComponent feedback_text_comp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback_text
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  Routine instructions
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ahora comenzará la tarea. Respondé lo más rápido que puedas sin cometer errores.

        Presioná ESPACIO para continuar.
    KeyboardComponent key_resp_instructiones
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fx_cross_routine
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    TextComponent fx_cross_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.8
      text = +
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  Routine stim
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    TextComponent stimulus
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
      text [set every repeat] = $Word
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    KeyboardComponent key_resp
      allowedKeys = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        serialconection._send_pulse_to_arduino()
  Routine acknowledgment
    RoutineSettingsComponent acknowledgment
      saveStartStop = False
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    TextComponent text_ending
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡Muchas gracias por participar!

        Pulse ESPACIO para finalizar.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_trials_instructions_3
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Presioná la flecha IZQUIERDA si la palabra te resulta muy familiar o comun, y la DERECHA si no te resulta muy familiar o comun.  No importa no conocer el significado de la palabra.

        Por ejemplo, las palabras 'bondad' y 'siesta' pueden ser consideradas muy familiares o comunes.

        Palabras como 'maleficio' o 'marqués' pueden ser consideradas no familiares o poco comunes.

        Pulse ESPACIO para continuar.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pulses_trial_instructions
    RoutineSettingsComponent pulses_trial_instructions
      saveStartStop = False
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    TextComponent pulses_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        A continuacion se mandaran 5 pulsos al equipo, acompañados de un sonido espaciados con 2 segundos.

        Pulse ESPACIO y espere 2 segundos.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank_2
    RoutineSettingsComponent blank_2
      saveStartStop = False
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    TextComponent blank
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine pulses
    RoutineSettingsComponent pulses
      saveStartStop = False
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    SoundComponent sound_1
      saveStartStop = False
      sound = A
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_2
      Code Type = Py
      Before Experiment:
        from pulseSender import PulseSender
        import pandas as pd
        import serial.tools.list_ports

        def find_serial_ports():
            ports = serial.tools.list_ports.comports()
            arduino_ports = []

            for port in ports:
                # You can add more checks here based on the specific attributes of your Arduino
                if 'Arduino' in port.description or 'CH340' in port.description:
                    arduino_ports.append(port.device)

            return arduino_ports[0]
      Begin Experiment:
        # Configure connection to the board
        port = find_serial_ports()
        baud_rate = 115200
        serialconection = PulseSender(port, baud_rate)
      Begin Routine:
        serialconection._send_pulse_to_arduino()
      End Experiment:
        serialconection._serial.close()

        tempFileName = thisExp.dataFileName + '_TEMP.csv'
        thisExp.saveAsWideText(tempFileName)
        df = pd.read_csv(tempFileName, delimiter=',')

        df.to_csv(thisExp.dataFileName + '_spanish.csv', sep=';', decimal=',', index=False, encoding='utf-8')

        os.remove(tempFileName)
  Routine pulses_response
    RoutineSettingsComponent pulses_response
      saveStartStop = False
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Si vio los 5 pulsos en la señal, presione ESPACIO para continuar.

        Si no, presione ESC y DESCONECTE el dispositivo serial.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine pulses_trial_instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 5
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    Routine blank_2
    Routine pulses
  LoopTerminator trials_2
  Routine pulses_response
  Routine practice_trials_instructions
  Routine practice_trials_instructions_3
  Routine practice_trials_instructions_2
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = resources/practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'practiceWord': 'novedad', 'englishWord': 'novelty', 'correctAns': 'left'},
      {'practiceWord': 'violencia', 'englishWord': 'violence', 'correctAns': 'left'},
      {'practiceWord': 'trance', 'englishWord': 'trance', 'correctAns': 'right'},
      {'practiceWord': 'ademán', 'englishWord': 'gesture', 'correctAns': 'right'},
      {'practiceWord': 'celadora', 'englishWord': 'warden', 'correctAns': 'right'},
      {'practiceWord': 'navajero', 'englishWord': 'navajero', 'correctAns': 'right'},
      {'practiceWord': 'peluquero', 'englishWord': 'hairdresser', 'correctAns': 'left'},
      {'practiceWord': 'tractor', 'englishWord': 'tractor', 'correctAns': 'left'}]
    Routine fx_cross_practice
    Routine stim_practice
  LoopTerminator trials_practice
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = resources/stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Word': 'enigma'},
      {'Word': 'quimera'},
      {'Word': 'codicia'},
      {'Word': 'heroísmo'},
      {'Word': 'severidad'},
      {'Word': 'idealismo'},
      {'Word': 'divinidad'},
      {'Word': 'analogía'},
      {'Word': 'impureza'},
      {'Word': 'fealdad'},
      {'Word': 'artefacto'},
      {'Word': 'martirio'},
      {'Word': 'instancia'},
      {'Word': 'adoración'},
      {'Word': 'trecho'},
      {'Word': 'depresión'},
      {'Word': 'optimismo'},
      {'Word': 'pérdida'},
      {'Word': 'facilidad'},
      {'Word': 'capacidad'},
      {'Word': 'trámite'},
      {'Word': 'artículo'},
      {'Word': 'prioridad'},
      {'Word': 'realidad'},
      {'Word': 'tentación'},
      {'Word': 'teoría'},
      {'Word': 'historia'},
      {'Word': 'atracción'},
      {'Word': 'ternura'},
      {'Word': 'tensión'},
      {'Word': 'embajada'},
      {'Word': 'verdugo'},
      {'Word': 'baranda'},
      {'Word': 'castidad'},
      {'Word': 'curandero'},
      {'Word': 'mezquita'},
      {'Word': 'cardenal'},
      {'Word': 'volcán'},
      {'Word': 'adulterio'},
      {'Word': 'modista'},
      {'Word': 'tarántula'},
      {'Word': 'garfio'},
      {'Word': 'ciclón'},
      {'Word': 'pedófilo'},
      {'Word': 'ejecutivo'},
      {'Word': 'mordisco'},
      {'Word': 'masaje'},
      {'Word': 'fotógrafa'},
      {'Word': 'erección'},
      {'Word': 'campeona'},
      {'Word': 'orgasmo'},
      {'Word': 'párrafo'},
      {'Word': 'bañador'},
      {'Word': 'profesora'},
      {'Word': 'cenicero'},
      {'Word': 'psicóloga'},
      {'Word': 'lágrima'},
      {'Word': 'librería'},
      {'Word': 'columna'},
      {'Word': 'relámpago'}]
    Routine fx_cross_routine
    Routine stim
  LoopTerminator trials
  Routine acknowledgment
